# Generated by Configurator on Thu Jan 30 16:16:19 CET 2025

# Reset
Property,Core,Initialize,0

# Devices
Device,COM7,SerialManager,COM7
Device,TIScope,NikonTI,TIScope
Device,TIEpiShutter,NikonTI,TIEpiShutter
Device,TIDiaShutter,NikonTI,TIDiaShutter
Device,TIDiaLamp,NikonTI,TIDiaLamp
Device,TINosePiece,NikonTI,TINosePiece
Device,TIFilterBlock1,NikonTI,TIFilterBlock1
Device,TILightPath,NikonTI,TILightPath
Device,TIZDrive,NikonTI,TIZDrive
Device,TIXYDrive,NikonTI,TIXYDrive
Device,TIPFSOffset,NikonTI,TIPFSOffset
Device,TIPFSStatus,NikonTI,TIPFSStatus
Device,Andor,Andor,Andor
Device,IntensiLightShutter,Nikon,IntensiLightShutter

# Pre-init settings for devices
Property,Andor,Camera,| iXon | DU8201_BV | 3311 |
Property,IntensiLightShutter,Port,COM7

# Pre-init settings for COM ports
Property,COM7,AnswerTimeout,500.0000
Property,COM7,BaudRate,9600
Property,COM7,DTR,Disable
Property,COM7,DataBits,8
Property,COM7,DelayBetweenCharsMs,0.0000
Property,COM7,Fast USB to Serial,Disable
Property,COM7,Handshaking,Off
Property,COM7,Parity,None
Property,COM7,StopBits,1
Property,COM7,Verbose,1

# Hub (parent) references
Parent,TIEpiShutter,TIScope
Parent,TIDiaShutter,TIScope
Parent,TIDiaLamp,TIScope
Parent,TINosePiece,TIScope
Parent,TIFilterBlock1,TIScope
Parent,TILightPath,TIScope
Parent,TIZDrive,TIScope
Parent,TIXYDrive,TIScope
Parent,TIPFSOffset,TIScope
Parent,TIPFSStatus,TIScope

# Initialize
Property,Core,Initialize,1

# Delays

# Focus directions
FocusDirection,TIZDrive,0
FocusDirection,TIPFSOffset,0

# Roles
Property,Core,Camera,Andor
Property,Core,Shutter,TIDiaShutter
Property,Core,Focus,TIZDrive
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels
# TINosePiece
Label,TINosePiece,5,6-Unknown
Label,TINosePiece,4,5-Plan Apo 60x NA 1.40 Oil
Label,TINosePiece,3,4-S Plan Fluor 40x NA 0.60 Dry
Label,TINosePiece,2,3-(Achromat) 20x NA 0.40 Dry
Label,TINosePiece,1,2-(Achromat) 10x NA 0.25 Dry
Label,TINosePiece,0,1-(Achromat) 4x NA 0.10 Dry
# TIFilterBlock1
Label,TIFilterBlock1,5,6-DIA
Label,TIFilterBlock1,4,5-Cy3
Label,TIFilterBlock1,3,4-Cy5
Label,TIFilterBlock1,2,3-MXR74
Label,TIFilterBlock1,1,2-DAPI
Label,TIFilterBlock1,0,1-FITC
# TILightPath
Label,TILightPath,3,4-Left80
Label,TILightPath,2,3-Right100
Label,TILightPath,1,2-Left100
Label,TILightPath,0,1-Eye100

# Configuration presets
# Group: dialamp
# Preset: NewPreset
ConfigGroup,dialamp,NewPreset,TIDiaLamp,ComputerControl,On
ConfigGroup,dialamp,NewPreset,TIDiaLamp,Intensity,4
ConfigGroup,dialamp,NewPreset,TIDiaLamp,State,1


# Group: Channel

# Group: System
# Preset: Startup



# PixelSize settings

